PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'age': '18'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [2560, 1440]
  color = 0.0000, 0.0000, 0.0000
  expName = visual_memory
  keyboardBackend = ioHub
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Routines
  Routine intro
    RoutineSettingsComponent intro
      saveStartStop = False
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Üdv!

        A következő kísérletben képek fognak megjelenni e képernyőn. Ezeket egy rövid szünet fogja követni, majd a képek ismét meg fognak jelenni úgy, hogy EGY kép más lesz.
        A feladatod az lesz hogy rákattints arra a képre, amelyik megváltozott.
        A képek száma pár próba után növekedni fog.

        Kattints a képernyőn bárhova egy rövid gyakorlás elkezdéséhez.
    CodeComponent init_variables
      Code Type = Auto->JS
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      Before Experiment:
        pictures = [
        "alma.png",
        "auto.png",
        "bogre.png",
        "ceruza.png",
        "esernyo.png",
        "fagyi.png",
        "fogas.png",
        "fotel.png",
        "hajszarito.png",
        "kad.png",
        "kamera.png",
        "laptop.png",
        "letra.png",
        "macko.png",
        "ollo.png",
        "ora.png",
        "papucs.png",
        "szemuveg.png",
        "vodor.png",
        "zokni.png"]
        blank_image = "blank.png"

        pictures_shuffled = []
        pictures_to_show = []

        base_positions = [
        [ -0.75, -0.75],[ -0.25, -0.75],[ 0.25, -0.75],[ 0.75, -0.75],
        [ -0.75, -0.25],[ -0.25, -0.25],[ 0.25, -0.25],[ 0.75, -0.25],
        [ -0.75,  0.25],[ -0.25,  0.25],[ 0.25,  0.25],[ 0.75,  0.25],
        [ -0.75,  0.75],[ -0.25,  0.75],[ 0.25,  0.75],[ 0.75,  0.75],
        ]

        img_size = [ 0.4, 0.4 ]
    MouseComponent intro_click
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine show_images_changed
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #shuffle(positions)
        pics_to_show[pic_num - 1] = pics_shuffled[-1]
        correct_image = f"image{pic_num - 1 }_2"

        thisExp.addData("correct_image", correct_image)

        thisExp.addData("correct_image_name", pics_to_show[pic_num - 1])
        thisExp.addData("correct_image_pos", positions[pic_num - 1])
      End Routine:
        is_correct = mouse.clicked_name[0] == correct_image
        thisExp.addData("is_correct", is_correct)
    ImageComponent image0_2
      image [set every repeat] = $pics_to_show[0]
      pos [set every repeat] = (positions[0])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image1_2
      image [set every repeat] = $pics_to_show[1]
      pos [set every repeat] = (positions[1])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image2_2
      image [set every repeat] = $pics_to_show[2]
      pos [set every repeat] = (positions[2])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image3_2
      image [set every repeat] = $pics_to_show[3]
      pos [set every repeat] = (positions[3])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image4_2
      image [set every repeat] = $pics_to_show[4]
      pos [set every repeat] = (positions[4])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image5_2
      image [set every repeat] = $pics_to_show[5]
      pos [set every repeat] = (positions[5])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image6_2
      image [set every repeat] = $pics_to_show[6]
      pos [set every repeat] = (positions[6])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image7_2
      image [set every repeat] = $pics_to_show[7]
      pos [set every repeat] = (positions[7])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image8_2
      image [set every repeat] = $pics_to_show[8]
      pos [set every repeat] = (positions[8])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image9_2
      image [set every repeat] = $pics_to_show[9]
      pos [set every repeat] = (positions[9])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image10_2
      image [set every repeat] = $pics_to_show[10]
      pos [set every repeat] = (positions[10])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image11_2
      image [set every repeat] = $pics_to_show[11]
      pos [set every repeat] = (positions[11])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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
    MouseComponent mouse
      clickable = image0_2,image1_2,image2_2,image3_2,image4_2,image5_2,image6_2,image7_2,image8_2,image9_2,image10_2,image11_2,image12_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,image
      startVal [time (s)] = 0.0
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  Routine show_images
    RoutineSettingsComponent show_images
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        #pic_num = 5
      Begin Routine:
        pics_shuffled = [ x for x in pictures ]
        shuffle(pics_shuffled)
        shuffle(base_positions)

        pics_to_show = []
        positions = []

        for i in range(13):
            if i < pic_num:
                pics_to_show.append(pics_shuffled[i])
                positions.append(base_positions[i])
            else:
                pics_to_show.append(blank_image)
                positions.append([2,2])

        for i in range(13):
            thisExp.addData(f"image{i}_name", pics_to_show[i])
            thisExp.addData(f"image{i}_position", positions[i])
    ImageComponent image0
      image [set every repeat] = $pics_to_show[0]
      pos [set every repeat] = (positions[0])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $pics_to_show[1]
      pos [set every repeat] = (positions[1])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $pics_to_show[2]
      pos [set every repeat] = (positions[2])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $pics_to_show[3]
      pos [set every repeat] = (positions[3])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $pics_to_show[4]
      pos [set every repeat] = (positions[4])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $pics_to_show[5]
      pos [set every repeat] = (positions[5])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image6
      image [set every repeat] = $pics_to_show[6]
      pos [set every repeat] = (positions[6])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image7
      image [set every repeat] = $pics_to_show[7]
      pos [set every repeat] = (positions[7])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image8
      image [set every repeat] = $pics_to_show[8]
      pos [set every repeat] = (positions[8])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image9
      image [set every repeat] = $pics_to_show[9]
      pos [set every repeat] = (positions[9])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image10
      image [set every repeat] = $pics_to_show[10]
      pos [set every repeat] = (positions[10])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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    ImageComponent image11
      image [set every repeat] = $pics_to_show[11]
      pos [set every repeat] = (positions[11])
      size [set every repeat] = (img_size)
      startVal [time (s)] = 0.0
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
  Routine blank_screen
    RoutineSettingsComponent blank_screen
      stopVal [duration (s)] = 2
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    TextComponent blank_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if is_correct:
            feedback_msg = "Helyes válasz"
        else:
            feedback_msg = "Ez most nem sikerült"
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_msg
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  Routine begin_real_trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A gyakorlás véget ért!

        Kattints bárhova a képernyőn a kísérlet elkezdéséhez.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine so_long_and_thanks_for_all_the_fish
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Köszönjük a részvételt!
        Viszlát!
    MouseComponent goodbye_click
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator training_loop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = stimulus.xlsx
    isTrials = False
    loopType = random
    nReps = 5
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    conditions:
      [{'pic_num': 5},
      {'pic_num': 9},
      {'pic_num': 13}]
    Routine show_images
    Routine blank_screen
    Routine show_images_changed
    Routine feedback
  LoopTerminator training_loop
  Routine begin_real_trial
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimulus.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'pic_num': 5},
      {'pic_num': 9},
      {'pic_num': 13}]
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      conditions:
        [{'pic_num': 5},
        {'pic_num': 9},
        {'pic_num': 13}]
      Routine show_images
      Routine blank_screen
      Routine show_images_changed
      Routine blank_screen
    LoopTerminator trials
  LoopTerminator trials_2
  Routine so_long_and_thanks_for_all_the_fish
